states("mechanics",
CaTrpn=0.01,
TmB=1,
XS=0,
XW=0,
Zetas=0,
Zetaw=0,
lmbda=1)

parameters("mechanics",
#lmbda=1,    #isometric version, stretch ratio is a parameter
#dLambda=0,  #isometric version, no length change
ktrpn = 0.1,
ntrpn = 2,
Trpn50 = 0.35,
rw = 0.5,
rs = 0.25,
gammas = 0.0085,
gammaw = 0.615,
phi = 2.23,
Tot_A = 25,
Beta0 = 2.3,
Beta1 = -2.4,
cat50_ref = 0.805,
Tref = 120,
kuw = 0.182,
kws = 0.012,
ku=0.04,
ntm=2.4,
p_a = 2.1,
p_b = 9.1,
p_k = 7,
etal = 200,
etas = 20,
Kse = 1,
lmbda_set=1.0,
Cp = 0.1,
b_ff = 30.0, #bff
visc = 1.6216216216216215)

parameters("Calcium transient (from Rice et al (2008))",
           tau1 = ScalarParam(20, unit="ms"),
           tau2 = ScalarParam(110, unit="ms"),
           start_time = ScalarParam(5, unit="ms"),
           Ca_amplitude = ScalarParam(1.45, unit="uM"),
           Ca_diastolic = ScalarParam(0.09, unit="uM"))

expressions("Calcium transient (from Rice et al (2008))")
beta = (tau1/tau2)**(-1/(tau1/tau2 - 1)) - (tau1/tau2)**(-1/(1 - tau2/tau1))
cai = Conditional(Gt(time, start_time), (Ca_amplitude - Ca_diastolic)/beta*(exp(-(time - start_time)/tau1) - exp(-(time - start_time)/tau2)) + Ca_diastolic, Ca_diastolic) # uM


expressions("mechanics")
XS_max = Conditional(Gt(XS, 0), XS, 0)
XW_max = Conditional(Gt(XW, 0), XW, 0)
CaTrpn_max = Conditional(Gt(CaTrpn, 0), CaTrpn, 0)
kwu = kuw*(1/rw-1)-kws
ksu = kws*rw*(1/rs-1)
Aw = Tot_A*rs/((1-rs)*rw+rs)
As = Aw
cw = phi*kuw*((1-rs)*(1-rw))/((1-rs)*rw)
cs = phi*kws*((1-rs)*rw)/rs
lambda_min12 = Conditional(Lt(lmbda, 1.2), lmbda, 1.2)
lambda_min087 = Conditional(Lt(lambda_min12, 0.87), lambda_min12, 0.87)
h_lambda_prima = 1+Beta0*(lambda_min12+lambda_min087-1.87)
h_lambda = Conditional(Gt(h_lambda_prima, 0), h_lambda_prima, 0)
XU = (1-TmB)-XS-XW
gammawu = gammaw*abs(Zetaw)
gammasu  = gammas*Conditional(Gt(Gt(Zetas,0)*Zetas, Lt(Zetas, -1)*(-Zetas-1)), Gt(Zetas,0)*Zetas, Lt(Zetas, -1)*(-Zetas-1))
dXS_dt = kws*XW - ksu*XS - gammasu*XS
dXW_dt = kuw*XU - kwu*XW - kws*XW - gammawu*XW
cat50 = (cat50_ref+Beta1*(lambda_min12-1))
dCaTrpn_dt = ktrpn*(((cai/cat50)**ntrpn)*(1-CaTrpn)-CaTrpn)
kb = ku*Trpn50**ntm/(1-rs-(1-rs)*rw)
dTmB_dt = kb*Conditional(Lt(CaTrpn**(-ntm/2), 100), CaTrpn**(-ntm/2), 100)*XU-ku*CaTrpn**(ntm/2)*TmB
Ta = h_lambda*(Tref/rs)*(XS*(Zetas+1) + XW*Zetaw)
Fse = Kse*(lmbda-lmbda_set) 
Fp = Cp * (exp(b_ff*(lmbda-1))-1)
Fpre = Cp * (exp(b_ff*(lmbda_set-1))-1)
tot_force = - Ta - Fp - Fse - Fpre 
dLambda = tot_force/visc
dZetas_dt = As*dLambda - cs*Zetas
dZetaw_dt = Aw*dLambda - cw*Zetaw
dlmbda_dt = dLambda



#C = lambda_min12 - 1
#dCd = C - Cd
#eta = Conditional(Lt(dCd, 0), etas, etal)
#dCd_dt = p_k * (C - Cd) / eta
#Fd = eta * dCd
#F1 = (exp( p_b * C) - 1)
#Tp = p_a * (F1 + Fd)
#Ttot = Ta + Tp
